PsychoPy2experiment version="2020.1.3"
Settings
  Audio lib = pyo
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'session': '01', 'participant': ''}
  Full-screen window = True
  Monitor = e330
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = norm
  Window size (pixels) = [1920, 1080]
  color = $[0.506,0.506,0.506]
  expName = stroop2
  logging level = warning
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Routines
  Routine trial
    TextComponent fixCross
      color = black
      durationEstim = 0.3
      font = Verdana
      letterHeight = 0.05
      startEstim = 0.0
      startVal [frame N] = 1
      stopVal [frame N] = 18
      text = +
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    TextComponent fovealWord
      color [set every repeat] = $FovCol
      durationEstim = 0.15
      font = Verdana
      letterHeight = 0.05
      startEstim = 0.5
      startVal [frame N] = 30
      stopVal [frame N] = 39
      text [set every repeat] = $FovWord
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    TextComponent parafovealWord
      color [set every repeat] = $ParaCol
      durationEstim = 0.15
      font = Verdana
      letterHeight = 0.05
      pos [set every repeat] = $ParaPos
      startEstim = 0.5
      startVal [frame N] = 30
      stopVal [frame N] = 39
      text [set every repeat] = $ParaWord
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    ParallelOutComponent stimulusOnset
      address = 0x1000
      durationEstim = 0.017
      startData = $StimTrig
      startEstim = 0.5
      startVal [frame N] = 30
      stopData = 0
      stopVal [duration (frames)] = 2
      syncScreen = True
      syncScreenRefresh = True
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    MicrophoneComponent mic
      channel = 0
      startEstim = 0.5
      startVal [frame N] = 30
      stereo = False
      stopVal [duration (s)] = 1.5
      syncScreenRefresh = True
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    KeyboardComponent voicekey
      allowedKeys [set every repeat] = '0'
      durationEstim = 1.5
      forceEndRoutine = False
      startEstim = 0.5
      startVal [frame N] = 30
      stopVal [duration (frames)] = 120
      store = first key
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    ParallelOutComponent responseOnset
      address = 0x1000
      durationEstim = 1.5
      startData = $RespTrig
      startEstim = 0.5
      startVal [condition] = len(voicekey.keys) > 0 and frameN <=148
      stopData = 0
      stopVal [duration (frames)] = 2
      syncScreen = True
      syncScreenRefresh = True
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    CodeComponent forceStop
      Code Type = Py
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      Each Frame:
        # if there is no voicekey response, the p_port item will prevent the trial ending unless we tell it to
        if frameN >= 120: # 120 for 2 seconds
            continueRoutine = False
  Routine instruct
    TextComponent Instruction
      color = $[-1.000,-1.000,-1.000]
      font = Verdana
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
      wrapWidth = 2
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      text:
        OK. Ready for the real thing?

        Remember, ignore the word itself;
        just say the name of the colour of the ink

        (Esc will quit)

        Press the spacebar to continue
    KeyboardComponent spaceToStart
      allowedKeys = 'space'
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      font = arial
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      wrapWidth = 2
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      text:
        This is the end of the experiment.

        Thanks!
  Routine isi
    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli-csvfiles\Stroop stimuli.csv
    endPoints = [1, 2]
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('block', 1), ('FovWord', 'RED'), ('ParaWord', 'MAIN'), ('FovCol', 'RED'), ('ParaCol', 'black'), ('ParaLoc', 'Left'), ('Congruency', 'c'), ('Condition', 'foveal_unified'), ('Correct', 1), ('Trigger', '?'), ('CheckFoveal', 1), ('CheckPara', 5), ('correct', 'RED')]),
      OrderedDict([('block', 1), ('FovWord', 'GREEN'), ('ParaWord', 'SHORT'), ('FovCol', 'GREEN'), ('ParaCol', 'black'), ('ParaLoc', 'Left'), ('Congruency', 'c'), ('Condition', 'foveal_unified'), ('Correct', 2), ('Trigger', '?'), ('CheckFoveal', 2), ('CheckPara', 6), ('correct', 'GREEN')]),
      OrderedDict([('block', 1), ('FovWord', 'BLUE'), ('ParaWord', 'SIDE'), ('FovCol', 'BLUE'), ('ParaCol', 'black'), ('ParaLoc', 'Left'), ('Congruency', 'c'), ('Condition', 'foveal_unified'), ('Correct', 3), ('Trigger', '?'), ('CheckFoveal', 3), ('CheckPara', 7), ('correct', 'BLUE')]),
      OrderedDict([('block', 1), ('FovWord', 'YELLOW'), ('ParaWord', 'LABEL'), ('FovCol', 'YELLOW'), ('ParaCol', 'black'), ('ParaLoc', 'Left'), ('Congruency', 'c'), ('Condition', 'foveal_unified'), ('Correct', 4), ('Trigger', '?'), ('CheckFoveal', 4), ('CheckPara', 8), ('correct', 'YELLOW')]),
      OrderedDict([('block', 1), ('FovWord', 'RED'), ('ParaWord', 'SHORT'), ('FovCol', 'RED'), ('ParaCol', 'black'), ('ParaLoc', 'Right'), ('Congruency', 'c'), ('Condition', 'foveal_unified'), ('Correct', 1), ('Trigger', '?'), ('CheckFoveal', 1), ('CheckPara', 6), ('correct', 'RED')])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
    Routine trial
    Routine isi
  LoopTerminator trials
  Routine thanks
